PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = lieDetector
  keyboardBackend = ioHub
  logging level = error
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Routines
  Routine trial
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    TextComponent trialQuestionText
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What number/letter do you see on this screen below?
        Please press the corresponding button on your keyboard.
        You may lie or tell the truth.
    TextComponent trialCharacterText
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      text [set every repeat] = $characterDisplayed
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    KeyboardComponent trialPressKey
      allowedKeys = '0','1','2','3','4','5','6','7','8','9','a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z'
      correctAns = $characterDisplayed
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine welcomeScreen
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    TextComponent welcomeText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hello! Welcome to our lie detection experiment.
        When you see a number or letter appear on your screen, please press that button on your keyboard to move on to the next screen.
        You may lie or tell the truth, but we'll know...

        Press SPACE to start the experiment.
    KeyboardComponent spaceToStart
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
      syncScreenRefresh = False
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  Routine goodbyeScreen
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    TextComponent goodbyeText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in our experiment!

        Your input has been very valuable.
        Have a nice day!

        You may press ESC to close this window.
Flow
  Routine welcomeScreen
  LoopInitiator trialsLoop loopType="TrialHandler"
    conditionsFile = alphanumericCharacters.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'character': 2},
      {'character': 3},
      {'character': 4},
      {'character': 5},
      {'character': 6},
      {'character': 7},
      {'character': 8},
      {'character': 9},
      {'character': 'a'},
      {'character': 'b'},
      {'character': 'c'},
      {'character': 'd'},
      {'character': 'e'},
      {'character': 'f'},
      {'character': 'g'},
      {'character': 'h'},
      {'character': 'i'},
      {'character': 'j'},
      {'character': 'k'},
      {'character': 'm'},
      {'character': 'n'},
      {'character': 'p'},
      {'character': 'q'},
      {'character': 'r'},
      {'character': 's'},
      {'character': 't'},
      {'character': 'u'},
      {'character': 'v'},
      {'character': 'w'},
      {'character': 'x'},
      {'character': 'y'},
      {'character': 'z'}]
    Routine trial
  LoopTerminator trialsLoop
  Routine goodbyeScreen
